

# Formula: Density = (Offset + (Factor*(FactorOffset + HU[-1000,2995] ))) * DensityCorrection
s:Ge/Patient/ImagingToMaterialConverter = "Schneider"
iv:Ge/Patient/SchneiderHounsfieldUnitSections = 8 -1000 -98 15 23 101 2001 2995 2996
uv:Ge/Patient/SchneiderDensityOffset = 7 0.00121 1.018 1.03 1.003 1.017 2.201 4.54
uv:Ge/Patient/SchneiderDensityFactor = 7 0.001029700665188 0.000893 0.0 0.001169 0.000592 0.0005 0.0
uv:Ge/Patient/SchneiderDensityFactorOffset = 7 1000. 0. 1000. 0. 0. -2000. 0.

# Define Materials used for HU
sv:Ge/Patient/SchneiderElements = 13 "Hydrogen" "Carbon" "Nitrogen" "Oxygen" "Magnesium" "Phosphorus" "Sulfur" "Chlorine" "Argon" "Calcium" "Sodium" "Potassium" "Titanium"
iv:Ge/Patient/SchneiderHUToMaterialSections = 26 -1000 -950 -120 -83 -53 -23 7 18 80 120 200 300 400 500 600 700 800 900 1000 1100 1200 1300 1400 1500 2995 2996
uv:Ge/Patient/SchneiderMaterialsWeight1  = 13 0.0      0.0    0.755    0.232  0.0       0.0       0.0    0.0      0.013  0.0	 0.0    0.0	  0.0
uv:Ge/Patient/SchneiderMaterialsWeight2  = 13 0.103    0.105  0.031    0.749  0.0       0.002     0.003  0.003    0.0    0.0	 0.002  0.002	  0.0
uv:Ge/Patient/SchneiderMaterialsWeight3  = 13 0.116    0.681  0.002    0.198  0.0       0.0       0.001  0.001    0.0    0.0	 0.001  0.0	  0.0
uv:Ge/Patient/SchneiderMaterialsWeight4  = 13 0.113    0.567  0.009    0.308  0.0       0.0       0.001  0.001    0.0    0.0	 0.001  0.0	  0.0
uv:Ge/Patient/SchneiderMaterialsWeight5  = 13 0.110    0.458  0.015    0.411  0.0       0.001     0.002  0.002    0.0    0.0     0.001  0.0       0.0
uv:Ge/Patient/SchneiderMaterialsWeight6  = 13 0.108    0.356  0.022    0.509  0.0       0.001     0.002  0.002    0.0    0.0     0.0    0.0       0.0
uv:Ge/Patient/SchneiderMaterialsWeight7  = 13 0.106    0.284  0.026    0.578  0.0       0.001     0.002  0.002    0.0    0.0     0.0    0.001     0.0
uv:Ge/Patient/SchneiderMaterialsWeight8  = 13 0.103    0.134  0.030    0.723  0.0       0.002     0.002  0.002    0.0    0.0     0.002  0.002     0.0
uv:Ge/Patient/SchneiderMaterialsWeight9  = 13 0.094    0.207  0.062    0.622  0.0       0.0       0.006  0.003    0.0    0.0     0.006  0.0       0.0
uv:Ge/Patient/SchneiderMaterialsWeight10 = 13 0.095    0.455  0.025    0.355  0.0       0.021     0.001	 0.001	  0.0    0.045   0.001  0.001     0.0
uv:Ge/Patient/SchneiderMaterialsWeight11 = 13 0.089    0.423  0.027    0.363  0.0       0.030	  0.001	 0.001	  0.0    0.064   0.001  0.001     0.0
uv:Ge/Patient/SchneiderMaterialsWeight12 = 13 0.082    0.391  0.029    0.372  0.0       0.039	  0.001	 0.001	  0.0    0.083   0.001  0.001     0.0
uv:Ge/Patient/SchneiderMaterialsWeight13 = 13 0.076    0.361  0.030    0.380  0.001     0.047	  0.002	 0.001	  0.0    0.101   0.001  0.0       0.0
uv:Ge/Patient/SchneiderMaterialsWeight14 = 13 0.071    0.335  0.032    0.387  0.001     0.054	  0.002	 0.0	  0.0    0.117   0.001  0.0       0.0
uv:Ge/Patient/SchneiderMaterialsWeight15 = 13 0.066    0.310  0.033    0.394  0.001     0.061	  0.002	 0.0	  0.0    0.132   0.001  0.0       0.0
uv:Ge/Patient/SchneiderMaterialsWeight16 = 13 0.061    0.287  0.035    0.400  0.001     0.067	  0.002	 0.0	  0.0    0.146   0.001  0.0       0.0
uv:Ge/Patient/SchneiderMaterialsWeight17 = 13 0.056    0.265  0.036    0.405  0.002     0.073	  0.003	 0.0	  0.0    0.159   0.001  0.0       0.0
uv:Ge/Patient/SchneiderMaterialsWeight18 = 13 0.052    0.246  0.037    0.411  0.002     0.078	  0.003	 0.0	  0.0    0.170   0.001  0.0       0.0
uv:Ge/Patient/SchneiderMaterialsWeight19 = 13 0.049    0.227  0.038    0.416  0.002     0.083	  0.003	 0.0	  0.0    0.181   0.001  0.0       0.0
uv:Ge/Patient/SchneiderMaterialsWeight20 = 13 0.045    0.210  0.039    0.420  0.002     0.088	  0.003	 0.0	  0.0    0.192   0.001  0.0       0.0
uv:Ge/Patient/SchneiderMaterialsWeight21 = 13 0.042    0.194  0.040    0.425  0.002     0.092	  0.003	 0.0	  0.0    0.201   0.001  0.0       0.0
uv:Ge/Patient/SchneiderMaterialsWeight22 = 13 0.039    0.179  0.041    0.429  0.002     0.096	  0.003	 0.0	  0.0    0.210   0.001  0.0       0.0
uv:Ge/Patient/SchneiderMaterialsWeight23 = 13 0.036    0.165  0.042    0.432  0.002     0.100	  0.003	 0.0	  0.0    0.219   0.001  0.0       0.0
uv:Ge/Patient/SchneiderMaterialsWeight24 = 13 0.034    0.155  0.042    0.435  0.002     0.103	  0.003	 0.0	  0.0    0.225   0.001  0.0       0.0
uv:Ge/Patient/SchneiderMaterialsWeight25 = 13 0.0      0.0    0.0      0.0    0.0       0.0	  0.0	 0.0	  0.0    0.0     0.0    0.0       1.0